macro "Race Tube Analysis Tool -  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"{
// 2019-08-22 modified from "Toolset Image Analysis Larrondo's Lab 1.0" race tube code
// Note 1: horizontal orientation for RTs is assumed here
// Note 2: frames used in this macro will start at #1 in the stack and go until the user input frame #
// Note 2 cont: use the frame # where the growth front hits the end of the camera area for best results


run("Set Measurements...", "area mean min stack redirect=None decimal=0");
run("Clear Results");
setSlice(1);
roiManager("Reset");
roiManager("Show all");
// frames = getNumber("Frames: ", frames);
divisions = getNumber("How many total frames do you want to use in your analysis?:", divisions);
// added by CMK to replace "frames" prompt
percentage = getNumber("What fraction of total tissue do you want to use as the growth front width (e.g. try 1, 3, 10)?:", percentage);
// added by CMK, new prompt
conh();

	
function conh() {
	Testh(divisions);
	do{
	ans2 = getString("Do you want to use this configuration for your analysis? (Y= Yes, N= No)","");
	if (ans2=="y"){
		RaceTube(divisions,percentage);
	} else if(ans2=="n"){
		Testh(divisions);
	}
	} while(ans2=="n");
}


function Testh(divisions) {
	roiManager("Reset");
	IJ.deleteRows(0,3);
	setTool("point");
	waitForUser("Select the top left corner of your race tube");
	roiManager("add");
	waitForUser("Select the top right corner of your race tube");
	roiManager("add");
	waitForUser("Select the bottom left corner of your race tube");
	roiManager("add");
	waitForUser("Select the growth front of your race tube from Frame #1");
	roiManager("add");
	// previous 2 lines added by CMK
	roiManager("measure");
	x1 = getResult("X",0);
	y1 = getResult("Y",0);
	x2 = getResult("X",1);
	y2 = getResult("Y",1);
	x3 = getResult("X",2);
	y3 = getResult("Y",2);
	x4 = getResult("X",3);
	roiManager("reset");
	for(a=0;a<divisions;a++){
		makePolygon(x1, y1, x2, y1, x2, y3, x3, y3);
		roiManager("add");
	}
}


function RaceTube(divisions,percentage){	
	makePoint(6,4);
	imga=getTitle();
	run("Duplicate...","title=[RaceTube Quantification Config.tiff]");
	selectImage("RaceTube Quantification Config.tiff");
	setForegroundColor(255,0,0);
	roiManager("Draw");
	ans= getString("Would you like to save your configuration?(Y=Yes, N=No)","");
	if (ans=="y"){
		saveAs("tiff");
		run("Close");
	}else if (ans=="n"){
		run("Close");
		}
	selectImage(imga);
	x1 = getResult("X",0);
	y1 = getResult("Y",0);
	x2 = getResult("X",1);
	y2 = getResult("Y",1);
	x3 = getResult("X",2);
	y3 = getResult("Y",2);
	x4 = getResult("X",3);
	growthFrontWidth = x2 / percentage;
	// user inputs the width of the growth front to use
	// this math scales the growth front width by total growth width
	// Example: whole tube growth = 1023 div 10 = 102.3 units of tissue to quant
	rateOfGrowth = (x2 - x4) / divisions;
	// x2 is max growth, x4 is starting front, divisions is # frames included
	// this math assumes a uniform linear growth rate
	// CAVEAT: Neurospora doesn't grow uniformly with DD time OR with time since inoculation OR by mutant!!
	// Hack solution for this script: ensure "growth front width" is wide enough to capture the newer section of tissue
	IJ.deleteRows(0,3);
	roiManager("reset");
	for(a=0; a<divisions; a++){
		makePolygon((x4 - growthFrontWidth) + (rateOfGrowth*a), y1, x4 + (rateOfGrowth*a), y1, x4 + (rateOfGrowth*a), y3, (x4 - growthFrontWidth) + (rateOfGrowth*a), y3);
		// polygon coordinates are drawn from top left -> top right -> bot right -> bot left
		roiManager("add");
		roiManager("Measure");
		roiManager("reset");
		wait(100);
		// delay added by CMK to allow user to watch growth front quant
		run("Next Slice [>]");
	}
	
	setSlice(1);
	setTool("rectangle");
	waitForUser("Select the background sector and press OK");
	for (b=0; b<divisions; b++) {
		run("Measure");
		run("Next Slice [>]");
	}

setSlice(1);
}	

	
ans3 = getString("Would you like to see the saturated wells? (y= Yes, n= No)","");
if (ans3=="y"){;
	Satu();
} else if (ans3=="n"){;
	ans4= getString("Would you like to save your measurements? (y= Yes, n= No)","");
	if (ans4=="y"){;
		saveAs("measurements");
		run("Set Measurements...", "area mean min stack redirect=None decimal=3");
	} else if(ans4=="n"){;
		run("Set Measurements...", "area mean min stack redirect=None decimal=3");
	}
}


function Satu(){
	resetMinAndMax();
	getLut(reds, greens, blues);
	for (i=133; i<256; i++) {;
		reds[i] = 255;
		greens[i] = 0;
		blues[i] = 0;
	}
	setLut(reds, greens, blues);
	ans3= getString("Would you like to save your measurements? (y= Yes, n= No)","");
	if (ans3=="y"){;
		saveAs("measurements");
		run("Set Measurements...", "area mean min stack redirect=None decimal=3");
	} else if(ans3=="n"){;
		run("Set Measurements...", "area mean min stack redirect=None decimal=3");
	}
	showMessage("You can turn saturation highlight OFF running Reset LUT Macro");
}


}